PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=CZLFT2MY
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['PROLIFIC_ID'], expInfo['participant'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'PROLIFIC_ID': '{{%PROLIFIC_PID%}}'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['resources/80s_LOW_02_Breaking_Away.mp3', 'resources/80s_LOW_06_Summer_Beach.mp3', 'resources/80s_MED_08_After_Tonight.mp3', 'resources/80s_MED_13_Your_Love_Drives_Me_Crazy.mp3', 'resources/antiphase_HC_IOS.wav', 'resources/antiphase_HC_ISO.wav', 'resources/antiphase_HC_OIS.wav', 'resources/antiphase_HC_OSI.wav', 'resources/antiphase_HC_SIO.wav', 'resources/antiphase_HC_SOI.wav', 'resources/clips_cues_G3.xlsx', 'resources/Electronic_LOW_09_Expansion.mp3', 'resources/Electronic_LOW_14_Tape.mp3', 'resources/Electronic_MED_19_Looped.mp3', 'resources/Electronic_MED_20_The_Distance.mp3', 'resources/foil_banana.mp3', 'resources/foil_spacebar.mp3', 'resources/Jazz_LOW_19_Sembellogy.mp3', 'resources/Jazz_LOW_21_Thinking_of_You_Mjq.mp3', 'resources/Jazz_MED_02_I_Guess_Ill_Hang_My_Tears_Out_To_Dry_-_Rudy_Van_Gelder_Edition_Remastered_1999.mp3', 'resources/Jazz_MED_07_Turiya_and_Ramakrishna.mp3', 'resources/Metal_LOW_09_Darkside.mp3', 'resources/Metal_LOW_14_Viaje_Por_Existir.mp3', 'resources/Metal_MED_19_Thunderhorse.mp3', 'resources/Metal_MED_20_Welcome_to_the_Family.mp3', 'resources/noise_calib_stim.wav', 'resources/survey_demographics.json', 'resources/vol_icon.png', 'resources/vol_test_loud-min_kang-lucy.mp3', 'resources/vol_test_quiet-daniel.mp3-blurred_moon.mp3']
  Save csv file = True
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = PsychoPy_exp-master
  frameRateMsg = Experiment screens loading and calibrating, please wait...
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine info_sheet
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    TextboxComponent title_INFO
      alignment = top-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, 0.05)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Information Sheet
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    TextboxComponent names_INFO
      alignment = top-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0, 0.05)
      size = (1.7, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        STUDY TITLE: Contextual Framing and Music-Evoked Thoughts
        RESEARCHER(S): Hazel van der Walle, Prof. Kelly Jakubowski
        RESEARCHER CONTACT EMAIL: hazel.a.van-der-walle@durham.ac.uk
    TextboxComponent text_INFO
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.027
      overflow = scroll
      pos = (0.03, 0.005)
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        WHAT IS THIS STUDY ABOUT?
        This study explores individuals’ descriptions of their experienced thoughts and imaginings while listening to music clips from a range of musical styles accompanied by contextual and associative information.

        WHAT WILL PARTICIPATION IN THIS STUDY INVOLVE?
        In this study you will listen to a set of short music clips and will be asked to describe any thoughts or scenes you imaging during music listening, your experience of the thoughts and the music clips, and some demographic questions.
        The study should take approximately 30 minutes to complete.

        HOW WILL THE DATA BE USED AND STORED?
        The data will be used in a research project investigating music-evoked thoughts. All data will be analysed and presented in a fully anonymised format, and results of this work may be included in publications, reports, presentations, and other research outputs.
        All data will be stored electronically, on a password-protected computer and password-protected hard drive. Data will only be shared with other researchers in a fully anonymised format, for research purposes only.

        WHAT IF I CHANGE MY MIND?
        You can withdraw from the study during participation at any time by simply choosing not to continue with the tasks; your data will subsequently be destroyed and will not be used in any further analysis. After completing the study, you will not be able to withdraw your data simply because we are not collecting any personal identifying information that is linked to your research data (e.g. your name or email), so your final research data will be completely de-identified.

        WHO CAN I CONTACT IF I HAVE QUESTIONS OR CONCERNS?
        Participants can contact the PhD researcher, Hazel van der Walle (hazel.a.van-der-walle@durham.ac.uk), or, should you feel unable to contact Hazel, her supervisor, Prof. Kelly Jakubowski (kelly.jakubowski@durham.ac.uk).


        >THANK YOU FOR READING THIS SECTION<
    TextboxComponent next_button_INFO
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.63,-.41)
      size = (.2,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Next>>>
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    MouseComponent mouse_INFO
      clickable = next_button_INFO
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 177
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  Routine consent
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    TextboxComponent title_CONSENT
      alignment = top-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, 0.05)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Informed Consent
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    TextboxComponent text_CONSENTinstr
      alignment = top-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      italic = True
      letterHeight = 0.04
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        Please read the following informed consent carefully.
    TextboxComponent tex_CONSENTinstr2
      alignment = top-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.036
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:


        Click the button below to confirm that you AGREE to continue.
        If you do NOT agree, please close the webpage to return your submission.
    TextboxComponent text_CONSENTform
      alignment = top-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.036
      pos = (0.02, 0)
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        1. I confirm that I have read and understand the Information Sheet for this project.

        2. I have had the opportunity to consider the information and ask any questions.

        3. I understand that my participation is voluntary. I am free to withdraw during the course of the study without giving any reason. After completing the study, I will not be able to withdraw my data due to automatic anonymisation.

        4. I agree to take part in this project.

        5. I have been informed about how the data will be used and stored.
    TextboxComponent agree_button_CONSENT
      bold = True
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (.5,-.41)
      size = (.45,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = I consent and agree to all of the above
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    MouseComponent mouse_CONSENT
      clickable = agree_button_CONSENT
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 177
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  Routine volume_check
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    TextboxComponent title_VOL
      alignment = top-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, 0.05)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = Volume Check
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    TextboxComponent text_VOL
      alignment = top-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        As this study involves listening to music, we would prefer that you wear headphones
        and that you are in a quiet environment with minimal distractions.

        Set your device to a volume at which both music clips below are comfortably heard.

        *Press the play buttons one at a time. Each clip will only play once, then you may continue*










        Please leave your device at this same level for the remainder of the study.
    SoundComponent quiet_VOL
      hamming = False
      sound [set every repeat] = resources/vol_test_quiet-daniel.mp3-blurred_moon.mp3
      startVal [condition] = mouse_VOL.isPressedIn(play_quiet_VOL)
      syncScreenRefresh = False
      volume = .7
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    SoundComponent loud_VOL
      hamming = False
      sound [set every repeat] = resources/vol_test_loud-min_kang-lucy.mp3
      startVal [condition] = mouse_VOL.isPressedIn(play_loud_VOL)
      syncScreenRefresh = False
      volume = .7
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    PolygonComponent play_quiet_VOL
      fillColor = 0.2078, 0.6078, -0.6078
      lineColor = -0.7333, 0.0902, -0.7333
      ori = 90
      pos = (-.3, -.07)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent play_loud_VOL
      fillColor = -0.7333, 0.0902, -0.7333
      lineColor = -0.7333, -0.3598, -0.7333
      ori = 90
      pos = (.3, -.07)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent text_play_quiet
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (-.33, -.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = ^ click to play quiet example
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    TextComponent text_play_loud
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.33, -.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = ^ click to play loud example
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    MouseComponent mouse_VOL
      clickable = play_quiet_VOL,play_loud_VOL
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextboxComponent next_button_VOL
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.63,-.41)
      size = (.2,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = Next>>>
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    MouseComponent mouse_next_button_VOL
      clickable = next_button_VOL
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 117
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  Routine instructions
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    TextboxComponent title_INSTR
      alignment = top-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, 0.05)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Task Instructions
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    TextboxComponent text_INSTR
      alignment = top-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      pos = (0.03, 0)
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        Sometimes when people listen to music, they imagine other thoughts or scenes.


        In the following task, you will hear 16 short music clips presented with some contextual information about the setting or situation it might be heard in.

        While listening to each clip, please simply take note of ANY thoughts or images that come to mind. You will be asked to write some details about these thoughts after each music clip.

        There are no “right” answers to this task – we are simply interested in the diversity of things people think about when listening to music.
        Similarly, if NO thoughts cross your mind while listening to a particular music clip, please just report this.


        For the duration of the study, please try to listen to the music without distraction in a quiet environment.

        Each clip will start playing automatically.
    TextboxComponent next_button_INSTR
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.63,-.41)
      size = (.2,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Ready!>>>
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    MouseComponent mouse_INSTR
      clickable = next_button_INSTR
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 177
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  Routine clip_presentation
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    CodeComponent prog_attn
      Code Type = Both
      Begin Experiment:
        progress_number = 0
        attnCheck = 0
        attnCheck2 = 0
        attnCheck3 = 0
      Begin JS Experiment:
        expInfo['userAgent'] = window.navigator.userAgent;

        progress_number = 0;
        attnCheck = 0;
        attnCheck2 = 0;
        attnCheck3 = 0;
      Begin JS Routine:
        progress_number = (progress_number + 1);
        attnCheck = 0;
        attnCheck2 = 0;
        attnCheck3 = 0;

        if ((progress_number === 4)) {
            attnCheck = 1;
        }
        if ((progress_number === 8)) {
            attnCheck2 = 1;
        }
        if ((progress_number === 12)) {
            attnCheck3 = 1;
        }
      Begin Routine:
        progress_number = progress_number+1
        attnCheck = 0
        attnCheck2 = 0
        attnCheck3 = 0

        if progress_number == 4:
            attnCheck = 1

        if progress_number == 8:
            attnCheck2 = 1

        if progress_number == 12:
            attnCheck3 = 1
    SoundComponent clip_stimuli
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $clip_file_loc
      startVal [time (s)] = 1
      stopVal [duration (s)] = 30.0
      volume = .7
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    TextComponent cue_stimuli
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 31
      text [set every repeat] = $context_cue_text
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    ImageComponent vol_icon
      color = 0.0000, 0.0000, 0.0000
      image = resources/vol_icon.png
      size = (0.3, 0.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 30
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    TextComponent progress_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 31
      text [set every repeat] = $'[Clip number ' + str(progress_number) + ' of 16]'
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  Routine debrief
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    TextboxComponent title_DEBRIEF
      alignment = top-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, 0.05)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Debrief
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    TextboxComponent text_DEBRIEF
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      overflow = scroll
      pos = (0.02, 0)
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        You have now reached the end of the study!

        Thank you very much for taking the time to participate and complete our study — your responses are greatly appreciated.

        This research aims to improve our understanding of the different types of thoughts and imaginings cued by music across a range of musical styles, and how these are influenced by contextual associations.

        Specifically, we are investigating whether listeners’ music-evoked thoughts are shaped significantly by extra-musical information and associations of to the music they are listening to — even when these associations are newly introduced or not personally formed by the listener. The findings will help guide future studies on music-evoked thoughts, including autobiographical memories, fictional stories, abstract visual imagery, mind-wandering, and multimodal imaginings.

        To date, much of the research in this area has focused on a single type of thought and used a limited range of musical genres, tending to examine contextual associations as an afterthought explanation to variance in results and overlooking context and associative stimuli cues. This study contributes to broadening that scope.

        Your participation is incredibly valuable to us and much future research, and we are very grateful for your involvement — thank you again.

        Please be assured that all data collected will be kept strictly confidential and used only for research purposes.

        If you have any further questions or concerns about the study, please contact the lead researcher, Hazel van der Walle (hazel.a.van-der-walle@durham.ac.uk), or her supervisor, Prof. Kelly Jakubowski (kelly.jakubowksi@durham.ac.uk).
    TextboxComponent end_button
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (.5,-.41)
      size = (.45,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Click here to finish the study :)
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    MouseComponent mouse_DEBRIEF
      clickable = end_button
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 177
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  Routine welcome
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    TextboxComponent text_WELCOME
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Welcome!


        Please complete this study using
        Google Chrome as your browser
        and wear headphones
        so you can hear the music
    TextboxComponent confirm_button
      bold = True
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0,-.33)
      size = (.65,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = I am ready to listen to some music!
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    MouseComponent mouse_WELCOME
      clickable = confirm_button
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 59.7
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  Routine full
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    CodeComponent code_studyFull
      Code Type = Both
      Begin JS Experiment:
        expInfo['userAgent'] = window.navigator.userAgent;

        attnCheck = 0;
        progress_number = 0;
        max_trials = 16;

        //fetch the group from the shelf - this returns 2 things - the label of the group (accessed using thisGroup.group) and a boolean to indicate if sampling is complete (accessed using thisGroup.finished)
        counterbal=await psychoJS.shelf.counterBalanceSelect({key:['Context_Cue_Groups']})
        stim_group=counterbal.group
        //stim_group = randint(1, 4);
        trial_num=((((max_trials * stim_group) - 16).toString() + ":") + (max_trials * stim_group).toString());
        // https://www.psychopy.org/online/shelf.html#counterbalancing

        study_full = 0;
        if (counterbal.finished) {
            study_full = 1;
        }
      Begin JS Routine:
        if (study_full === 0) {
            continueRoutine = false;
        }
    TextComponent StudyFull_text
      color = -1.0000, -1.0000, -1.0000
      font = Aptos
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This study is already full!
        Spaces may be freed up later, so do check back to see if any places have been made available.
        Thank you for considering taking part.

        ~close the webpage to exit~
  Routine Q_thought_or_not
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    TextboxComponent text_thought_or_not
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.039
      size = (1.6, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 180
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      text:
        Did you imagine any other thoughts or scenes while listening to this music?

        Please press 'y' on your keyboard for yes, or press 'n' for no.
    KeyboardComponent response_thought_or_not
      allowedKeys [set every repeat] = 'y', 'n'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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  Routine thought_description
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    CodeComponent code_THOUGHT
      Code Type = Both
      Begin JS Routine:
        if (response_thought_or_not.keys === 'n') {
            continueRoutine = false;
        }
    TextboxComponent instr_THOUGHT
      alignment = top-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      pos = (0, 0.1)
      size = (1.6, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Please describe the thoughts or scenes you imagined in as much detail as possible.
        You have up to 2-minutes to spend on your response. The "Next" button will appear after 30-seconds.
    TextboxComponent descr_THOUGHT
      bold = False
      borderColor = 0.0039, 0.0039, 0.0039
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.04
      pos = (0, -0.01)
      size = (1.2, 0.44)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    TextboxComponent next_button_THOUGHT
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      font = Aptos
      letterHeight = 0.03
      pos = (.63,-.41)
      size = (.2,.1)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 90
      text [set every repeat] = Next>>>
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    MouseComponent mouse_THOUGHT
      clickable = next_button_THOUGHT
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      startVal [time (s)] = 30
      stopVal [duration (s)] = 90
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  Routine thought_ratings
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    CodeComponent code_TH_RATINGS
      Code Type = JS
      Begin JS Routine:
        if (response_thought_or_not.keys === 'n') {
            continueRoutine = false;
        }

        rating_1_finished = 0;
      Each JS Frame:
        if (rating_music_prompted.getRating() != undefined && rating_spontaneity.getRating() != undefined && rating_novelty.getRating() != undefined) {

                rating_1_finished = 1;
            }
    TextboxComponent Q_music_prompted
      alignment = top-left
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, 0.30)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = To what degree do you think these thoughts were prompted by the music you just heard?
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    SliderComponent rating_music_prompted
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      font = Aptos
      forceEndRoutine = False
      granularity = 1
      labels = ('1 \n Not at all \n prompted by the music', 2, 3, 4, '5 \n Entirely prompted \n by the music')
      letterHeight = 0.025
      pos = (0, 0.3)
      size = [1,0.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent Q_spontaneity
      alignment = top-left
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, 0.00)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Please rate the degree to which you deliberately brought these thoughts to mind versus they came to mind spontaneously.
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    SliderComponent rating_spontaneity
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      font = Aptos
      forceEndRoutine = False
      granularity = 1
      labels = ('1 \n Entirely deliberately', 2, 3, 4, '5 \n Entirely spontaneously')
      letterHeight = 0.025
      pos = (0, -0.01)
      size = [1,0.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent Q_novelty
      alignment = top-left
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, -0.31)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = To what degree were these thoughts memories of things you’ve seen or experienced before, versus things you’ve newly imagined? 
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    SliderComponent rating_novelty
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      forceEndRoutine = False
      granularity = 1
      labels = ('1 \n Entirely things I’ve seen \n or experienced before', 2, 3, 4, '5 \n Entirely things I’ve \n newly imagined')
      letterHeight = 0.025
      pos = (0, -0.31)
      size = [1,0.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent next_button_TH_RATINGS
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.74,-.41)
      size = (.2,.1)
      startVal [condition] = rating_1_finished==1
      text [set every repeat] = Next>>>
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    MouseComponent mouse_TH_RATINGS
      clickable = next_button_TH_RATINGS
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      startVal [condition] = rating_1_finished==1
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  Routine no_thought
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    CodeComponent code_NOT
      Code Type = Both
      Begin JS Routine:
        if (response_thought_or_not.keys === 'y') {
            continueRoutine = false;
        }
    TextboxComponent instr_NOT
      alignment = top-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      pos = (0, 0.12)
      size = (1.6, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Why do you think you didn’t imagine any thoughts or scenes during this music?
        Please answer this question in as much detail as possible. You have up to 2-minutes to spend on your response. The "Next" button will appear after 30-seconds.
    TextboxComponent input_NOT
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.04
      pos = (0, -0.01)
      size = (1.2, 0.44)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    TextboxComponent next_button_NOT
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.63,-.41)
      size = (.2,.1)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 90
      text [set every repeat] = Next>>>
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    MouseComponent mouse_NOT
      clickable = next_button_NOT
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      startVal [time (s)] = 30
      stopVal [duration (s)] = 90
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  Routine general_ratings
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    CodeComponent code_G_RATINGS
      Code Type = JS
      Begin JS Routine:
        rating_2_finished = 0;
      Each JS Frame:
        if (rating_familiarity.getRating() != undefined && rating_enjoyment.getRating() != undefined) {

                rating_2_finished = 1;
            }
    TextboxComponent Q_familiarity
      alignment = top-left
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, 0.30)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = How often have you heard this specific song/piece before today?
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    SliderComponent rating_familiarity
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      font = Aptos
      forceEndRoutine = False
      granularity = 1
      labels = ('1 \n Never heard ', 2, 3, 4, '5 \n Heard a lot')
      letterHeight = 0.025
      pos = (0, 0.3)
      size = [1,0.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent Q_enjoyment
      alignment = top-left
      bold = True
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, 0.0)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = How much did you enjoy listening to this music?
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    SliderComponent rating_enjoyment
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      font = Aptos
      forceEndRoutine = False
      granularity = 1
      labels = ('1 \n Not at all  ', 2, 3, 4, '5 \n Very much so')
      letterHeight = 0.025
      pos = (0, -0.01)
      size = [1,0.03]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent next_button_G_RATINGS
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.74,-.41)
      size = (.2,.1)
      startVal [condition] = rating_2_finished==1
      text [set every repeat] = Next>>>
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    MouseComponent mouse_G_RATINGS
      clickable = next_button_G_RATINGS
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      startVal [condition] = rating_2_finished==1
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  Routine MLHC_1
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    CodeComponent code_MLHC_1
      Code Type = JS
      Begin JS Experiment:
        headphone_check_score = 0;
      End JS Routine:
        if ((resp_MLHC_1.keys === '3')) {
            headphone_check_score = (headphone_check_score + 1);
        }
    TextboxComponent title_MLHC_1
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.4, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = Trial 1
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    SoundComponent sound_MLHC_1
      hamming = False
      sound = resources/antiphase_HC_OIS.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    TextboxComponent Q_MLHC_1
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.033
      size = (1.4, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        Which tone was quietest?

        Please press '1' on your keyboard for the first tone, '2' for the second tone, and '3' for the third tone.
    KeyboardComponent resp_MLHC_1
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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  Routine MLHC_2
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    CodeComponent code_MLHC_2
      Code Type = JS
      End JS Routine:
        if ((resp_MLHC_2.keys === '2')) {
            headphone_check_score = (headphone_check_score + 1);
        }
    TextboxComponent title_MLHC_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.4, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = Trial 2
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    SoundComponent sound_MLHC_2
      hamming = False
      sound = resources/antiphase_HC_OSI.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    TextboxComponent Q_MLHC_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.033
      size = (1.4, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        Which tone was quietest?

        Please press '1' on your keyboard for the first tone, '2' for the second tone, and '3' for the third tone.
    KeyboardComponent resp_MLHC_2
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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  Routine McdermottLab_HeadphoneCheck_intro
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    TextboxComponent instr_MLHC
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.4, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        Let's do a brief technical check now.
        Please ensure you are wearing headphones.


        You will hear 3 tones one by one.
        Your task is to judge which tone is quietest.

        There are 6 task trials in total.


        Press the "Next" button below to begin.
    TextboxComponent next_button_MLHC
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.63,-.41)
      size = (.2,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Next>>>
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    MouseComponent mouse_MLHC
      clickable = next_button_MLHC
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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  Routine MLHC_3
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    CodeComponent code_MLHC_3
      Code Type = JS
      End JS Routine:
        if ((resp_MLHC_3.keys === '1')) {
            headphone_check_score = (headphone_check_score + 1);
        }
    TextboxComponent title_MLHC_3
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.4, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = Trial 3
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    SoundComponent sound_MLHC_3
      hamming = False
      sound = resources/antiphase_HC_SIO.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    TextboxComponent Q_MLHC_3
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.033
      size = (1.4, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        Which tone was quietest?

        Please press '1' on your keyboard for the first tone, '2' for the second tone, and '3' for the third tone.
    KeyboardComponent resp_MLHC_3
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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  Routine MLHC_4
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    CodeComponent code_MLHC_4
      Code Type = JS
      End JS Routine:
        if ((resp_MLHC_4.keys === '1')) {
            headphone_check_score = (headphone_check_score + 1);
        }
    TextboxComponent title_MLHC_4
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.4, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = Trial 4
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    SoundComponent sound_MLHC_4
      hamming = False
      sound [set every repeat] = resources/antiphase_HC_SOI.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    TextboxComponent Q_MLHC_4
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.033
      size = (1.4, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        Which tone was quietest?

        Please press '1' on your keyboard for the first tone, '2' for the second tone, and '3' for the third tone.
    KeyboardComponent resp_MLHC_4
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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  Routine MLHC_5
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    CodeComponent code_MLHC_5
      Code Type = JS
      End JS Routine:
        if ((resp_MLHC_5.keys === '3')) {
            headphone_check_score = (headphone_check_score + 1);
        }
    TextboxComponent title_MLHC_5
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.4, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = Trial 5
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    SoundComponent sound_MLHC_5
      hamming = False
      sound = resources/antiphase_HC_IOS.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    TextboxComponent Q_MLHC_5
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.033
      size = (1.4, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        Which tone was quietest?

        Please press '1' on your keyboard for the first tone, '2' for the second tone, and '3' for the third tone.
    KeyboardComponent resp_MLHC_5
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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  Routine MLHC_6
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    CodeComponent code_MLHC_6
      Code Type = JS
      End JS Routine:
        if ((resp_MLHC_6.keys === '2')) {
            headphone_check_score = (headphone_check_score + 1);
        }

        headphone_check_fail = 0;

        if (headphone_check_score < 5) {
            headphone_check_fail = 1;
        }
    TextboxComponent title_MLHC_6
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.4, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text [set every repeat] = Trial 6
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    SoundComponent sound_MLHC_6
      hamming = False
      sound [set every repeat] = resources/antiphase_HC_ISO.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    TextboxComponent Q_MLHC_6
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.033
      size = (1.4, 0.8)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        Which tone was quietest?

        Please press '1' on your keyboard for the first tone, '2' for the second tone, and '3' for the third tone.
    KeyboardComponent resp_MLHC_6
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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  Routine MLHC_fail
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    TextComponent FAIL_headphonecheck_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.033
      startVal [time (s)] = 0.0
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      text:
        Sorry, your device did not pass the technical check, so you cannot take part in the study.

        If you’d like to try again please make sure you are wearing headphones, and using a computer running Google Chrome.
        Otherwise, please return your submission on Prolific.

        ~You can close this webpage to exit~
  Routine AI_notice
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    TextboxComponent text_AI_use_warning
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1.7, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Automated AI generated contributions will be rejected.


        We are interested in real, human experience during music listening in this study.
        There are no "right" answers - we want to know what YOU have been thinking!


        Please press the button below to continue if you agree to not use AI.
        If you do not agree, please close the webpage to return your submission on Prolific.


        Thank you in advance.
    TextboxComponent no_AI_agree_button
      bold = True
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.033
      pos = (0,-.33)
      size = (.65,.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = I agree to not use AI in this study
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    MouseComponent mouse_AI
      clickable = no_AI_agree_button
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 2
      stopVal [duration (s)] = 58
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  Routine attn_banana
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    SoundComponent foil_banana
      hamming = False
      sound [set every repeat] = resources/foil_banana.mp3
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 19.7
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    TextboxComponent textbox_ATTN
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.04
      size = (0.6, 0.3)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 19.7
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    TextboxComponent next_button_ATTN
      bold = False
      editable = False
      fillColor = 0.0902, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (.63,-.41)
      size = (.2,.1)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 15
      text = Next>>>
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    MouseComponent mouse_ATTN
      clickable = next_button_ATTN
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 15
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  Routine attn_spacebar
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    SoundComponent foil_spacebar
      hamming = False
      saveStartStop = False
      sound = resources/foil_spacebar.mp3
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      volume = .7
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    TextComponent cue_stimuli_ATTN
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Heard in a video game
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    ImageComponent vol_icon_ATTN
      color = 0.0000, 0.0000, 0.0000
      image = resources/vol_icon.png
      size = (0.3, 0.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 19
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    TextComponent progress_text_ATTN
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = [Clip number 9 of 16]
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    KeyboardComponent spacebar_ATTN
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 19
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  Routine attn_vocalistQ
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    TextboxComponent text_vocalistATTN
      bold = True
      borderColor = 1.0000, 1.0000, 1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.039
      size = (1.6, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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      text:
        Did you hear a vocalist in this clip?
    TextboxComponent text_y_n
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.039
      size = (1.6, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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      text:
        Please press 'y' on your keyboard for yes, or press 'n' for no.
    KeyboardComponent response_vocalistATTN
      allowedKeys [set every repeat] = 'y', 'n'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  PavloviaSurveyRoutine genre_exposure
    surveyJson = resources/survey_genreExp.json
    surveyType = json
  PavloviaSurveyRoutine clip_response
    surveyId = 962451b9-df2e-42b4-be53-d2f540a78b61
    surveyJson = resources/survey_clipResp.json
    surveyType = json
  PavloviaSurveyRoutine demographics
    surveyJson = resources/survey_demographics.json
    surveyType = json
Flow
  Routine welcome
  Routine volume_check
  Routine McdermottLab_HeadphoneCheck_intro
  Routine MLHC_1
  Routine MLHC_2
  Routine MLHC_3
  Routine MLHC_4
  Routine MLHC_5
  Routine MLHC_6
  LoopInitiator headphone_check_failed loopType="TrialHandler"
    loopType = random
    nReps = headphone_check_fail
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    Routine MLHC_fail
  LoopTerminator headphone_check_failed
  Routine info_sheet
  Routine consent
  Routine AI_notice
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = resources/clips_cues_G3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'clip_file_loc': 'resources/80s_LOW_02_Breaking_Away.mp3', 'context_cue_text': 'Typically heard in a movie'},
      {'clip_file_loc': 'resources/80s_LOW_06_Summer_Beach.mp3', 'context_cue_text': 'Typically heard in a video game'},
      {'clip_file_loc': 'resources/80s_MED_08_After_Tonight.mp3', 'context_cue_text': 'Typically heard in a concert\xa0'},
      {'clip_file_loc': 'resources/80s_MED_13_Your_Love_Drives_Me_Crazy.mp3', 'context_cue_text': 'Typically heard in a bar\xa0'},
      {'clip_file_loc': 'resources/Electronic_LOW_09_Expansion.mp3', 'context_cue_text': 'Typically heard in a concert\xa0'},
      {'clip_file_loc': 'resources/Electronic_LOW_14_Tape.mp3', 'context_cue_text': 'Typically heard in a movie'},
      {'clip_file_loc': 'resources/Electronic_MED_19_Looped.mp3', 'context_cue_text': 'Typically heard in a bar\xa0'},
      {'clip_file_loc': 'resources/Electronic_MED_20_The_Distance.mp3', 'context_cue_text': 'Typically heard in a video game'},
      {'clip_file_loc': 'resources/Jazz_LOW_19_Sembellogy.mp3', 'context_cue_text': 'Typically heard in a bar\xa0'},
      {'clip_file_loc': 'resources/Jazz_LOW_21_Thinking_of_You_Mjq.mp3', 'context_cue_text': 'Typically heard in a video game'},
      {'clip_file_loc': 'resources/Jazz_MED_02_I_Guess_Ill_Hang_My_Tears_Out_To_Dry_-_Rudy_Van_Gelder_Edition_Remastered_1999.mp3', 'context_cue_text': 'Typically heard in a movie'},
      {'clip_file_loc': 'resources/Jazz_MED_07_Turiya_and_Ramakrishna.mp3', 'context_cue_text': 'Typically heard in a concert\xa0'}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
    Routine clip_presentation
    LoopInitiator attnChecking3 loopType="TrialHandler"
      loopType = sequential
      nReps = attnCheck3
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      Routine attn_vocalistQ
    LoopTerminator attnChecking3
    Routine Q_thought_or_not
    Routine thought_description
    Routine thought_ratings
    Routine no_thought
    Routine general_ratings
    LoopInitiator attnChecking loopType="TrialHandler"
      loopType = sequential
      nReps = attnCheck
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      Routine attn_banana
    LoopTerminator attnChecking
    LoopInitiator attnChecking2 loopType="TrialHandler"
      loopType = sequential
      nReps = attnCheck2
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      Routine attn_spacebar
    LoopTerminator attnChecking2
  LoopTerminator trials
  PavloviaSurveyRoutine demographics
  Routine debrief
